usegui = 1

{load_file("stdlib.hoc")}
{load_file("stdgui.hoc")}


create Soma
access Soma

celsius = 23

Soma {pt3dclear() pt3dadd(0.0, 0, 0.0, 27) pt3dadd(0.0, 27, 0.0, 27)}
define_shape()

forall Ra = 100

insert Golgi_lkg
glbar_Golgi_lkg=2.1e-05

insert Golgi_SK2 
gkbar_Golgi_SK2=0.000000038

//ena = -55
ek = -84.69


insert CaClamp

proc initialiseValues0() {

    forall  v = -65

}

objref fih0
{fih0 = new FInitializeHandler(0, "initialiseValues0()")}
/*
objref stim1 
objref stim2 


Soma {
    stim1 = new IClamp(0.5)
    stim1.del = 200.0
    stim1.dur = 200.0
    stim1.amp = -0.005
    
    stim2 = new IClamp(0.5)
    stim2.del = 800.0
    stim2.dur = 200.0
    stim2.amp = 0.04
}*/



tstop = 1000.0
dt = 0.002


objref v_time
objref f_time

v_time = new Vector()
{ v_time.record(&t) }
//{ v_time.resize(70001) } // false
f_time = new File()


objref Soma_v
{ Soma_v = new Vector() }
{ Soma_v.record(&Soma.v(0.5))} 

objref Soma_ca
{ Soma_ca = new Vector() }
{ Soma_ca.record(&Soma.cai(0.5))} 

objref Soma_o1, Soma_o2, Soma_c1, Soma_c2, Soma_c3, Soma_c4
{ Soma_o1 = new Vector() }
{ Soma_o1.record(&Soma.o1_Golgi_SK2(0.5))} 
{ Soma_o2 = new Vector() }
{ Soma_o2.record(&Soma.o2_Golgi_SK2(0.5))} 
{ Soma_c1 = new Vector() }
{ Soma_c1.record(&Soma.c1_Golgi_SK2(0.5))} 
{ Soma_c2 = new Vector() }
{ Soma_c2.record(&Soma.c2_Golgi_SK2(0.5))} 
{ Soma_c3 = new Vector() }
{ Soma_c3.record(&Soma.c3_Golgi_SK2(0.5))} 
{ Soma_c4 = new Vector() }
{ Soma_c4.record(&Soma.c4_Golgi_SK2(0.5))} 

objref f_Soma_v


objref GraphWin_0
objref GraphWin_1
objref GraphWin_2
objref GraphWin_3

if (usegui==1) {
    GraphWin_0 = new Graph(0)
    {GraphWin_0.size(0, tstop,-110.0,50.0)}
    {GraphWin_0.view(0, -110.0, tstop, 160.0, 80, 330, 330, 250)}
    {
        GraphWin_0.addexpr("Soma.v", "Soma.v(0.5)", 1, 1, 0.8, 0.9, 2)
        graphList[0].append(GraphWin_0)
    }

    GraphWin_1 = new Graph(0)
    {GraphWin_1.size(0, tstop,-0.1,1.1)}
    {GraphWin_1.view(0, -0.1, tstop, 1.2, 80, 330, 330, 250)}
    {
        GraphWin_1.addexpr("o1", "Soma.o1_Golgi_SK2", 1, 1, 0.8, 0.9, 2)
        GraphWin_1.addexpr("o2", "Soma.o2_Golgi_SK2", 2, 1, 0.8, 0.9, 2)
        GraphWin_1.addexpr("c1", "Soma.c1_Golgi_SK2", 3, 1, 0.8, 0.9, 2)
        GraphWin_1.addexpr("c2", "Soma.c2_Golgi_SK2", 4, 1, 0.8, 0.9, 2)
        GraphWin_1.addexpr("c3", "Soma.c3_Golgi_SK2", 5, 1, 0.8, 0.9, 2)
        GraphWin_1.addexpr("c4", "Soma.c4_Golgi_SK2", 6, 1, 0.8, 0.9, 2)
        graphList[0].append(GraphWin_1)
    }

    GraphWin_2 = new Graph(0)
    {GraphWin_2.size(0, tstop,0,0.005)}
    {GraphWin_2.view(0, 0, tstop, 0.005, 80, 330, 330, 250)}
    {
        GraphWin_2.addexpr("cai", "Soma.cai", 1, 1, 0.8, 0.9, 2)
        graphList[0].append(GraphWin_2)
    }

}

{run()}

strdef timeFilename


f_Soma_v = new File()
strdef filename
{sprint(filename, "KAHP.dat")}
f_Soma_v.wopen(filename)
Soma_v.printf(f_Soma_v)
f_Soma_v.close()



{ sprint(timeFilename, "%s",  "time.dat")}
{ f_time.wopen(timeFilename) }
{ v_time.printf(f_time) }
{ f_time.close() }

objref f_Soma_si
f_Soma_si = new File()
{ f_Soma_si.wopen("KAHP.si.dat") }
for i=0, Soma_v.size()-1 {
   f_Soma_si.printf("%f\t%f\n", v_time.x[i]/1000, Soma_v.x[i]/1000)
}
{ f_Soma_si.close() }

objref f_Soma_r
f_Soma_r = new File()
{ f_Soma_r.wopen("KAHP.states.dat") }
for i=0, Soma_v.size()-1 {
   f_Soma_r.printf("%f\t%f\t%f\t%f\t%f\t%f\t%f\n", v_time.x[i]/1000, Soma_o1.x[i], Soma_o2.x[i], Soma_c1.x[i], Soma_c2.x[i], Soma_c3.x[i], Soma_c4.x[i])
}
{ f_Soma_r.close() }




if (usegui==1) {
    //   This code pops up a simple Run Control

    {
    xpanel("RunControl", 0)
    v_init = -60.0
    xbutton("Init & Run","run()")
    xbutton("Stop","stoprun=1")
    t = 0
    xvalue("t","t", 2 )
    xvalue("Tstop","tstop", 1,"tstop_changed()", 0, 1 )
    dt = 0.01
     xvalue("dt","dt", 1,"setdt()", 0, 1 )
    xpanel(80,80)
    }
}

forall psection()
